# Generated by Configurator on Sat Jun 01 12:47:37 IRDT 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,DHub,DemoCamera,DHub
Device,FreeSerialPort,FreeSerialPort,FreeSerialPort
Device,BaslerCamera,BaslerPylon5,BaslerCamera

# Pre-init settings for devices
Property,FreeSerialPort,Port,COM5

# Pre-init settings for COM ports
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,9600
Property,COM5,DataBits,8
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Fast USB to Serial,Disable
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,BaslerCamera
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

